<?xml version="1.0" encoding="ISO-8859-1"?>

<xsl:stylesheet version="1.0"
xmlns:xsl="http://www.w3.org/1999/XSL/Transform">

<xsl:output method="xml" indent="yes"/>

<xsl:variable name="phaseOversampling">
  <xsl:choose>
    <xsl:when test="not(siemens/IRIS/DERIVED/phaseOversampling)">0</xsl:when>
    <xsl:otherwise><xsl:value-of select="siemens/IRIS/DERIVED/phaseOversampling"/></xsl:otherwise>
  </xsl:choose>
</xsl:variable>

<xsl:variable name="sliceOversampling">
  <xsl:choose>
    <xsl:when test="not(siemens/MEAS/sKSpace/dSliceOversamplingForDialog)">0</xsl:when>
    <xsl:otherwise><xsl:value-of select="siemens/MEAS/sKSpace/dSliceOversamplingForDialog"/></xsl:otherwise>
  </xsl:choose>
</xsl:variable>

<xsl:variable name="partialFourierPhase">
  <xsl:choose>
	<xsl:when test="siemens/MEAS/sKSpace/ucPhasePartialFourier = 1">0.5</xsl:when>
	<xsl:when test="siemens/MEAS/sKSpace/ucPhasePartialFourier = 2">0.75</xsl:when>
	<xsl:when test="siemens/MEAS/sKSpace/ucPhasePartialFourier = 2">0.875</xsl:when>
	<xsl:otherwise>1.0</xsl:otherwise>
  </xsl:choose>
</xsl:variable>

<xsl:template match="/">
<ismrmrdHeader xsi:schemaLocation="http://www.ismrm.org/ISMRMRD ismrmrd.xsd"
        xmlns="http://www.ismrm.org/ISMRMRD"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
        xmlns:xs="http://www.w3.org/2001/XMLSchema">
        
  <experimentalConditions>
  	<H1resonanceFrequency_Hz><xsl:value-of select="siemens/DICOM/lFrequency"/></H1resonanceFrequency_Hz>
  </experimentalConditions>      
  <encoding>
    <trajectory>
      <xsl:choose>
		<xsl:when test="siemens/MEAS/sKSpace/ucTrajectory = 1">cartesian</xsl:when>
		<xsl:when test="siemens/MEAS/sKSpace/ucTrajectory = 2">radial</xsl:when>
		<xsl:when test="siemens/MEAS/sKSpace/ucTrajectory = 4">spiral</xsl:when>
		<xsl:when test="siemens/MEAS/sKSpace/ucTrajectory = 8">propellor</xsl:when>
		<xsl:otherwise>other</xsl:otherwise>
      </xsl:choose>
    </trajectory>
    
    <xsl:if test="siemens/MEAS/sKSpace/ucTrajectory">
	    <trajectoryDescription>
	    	<identifier>HargreavesVDS2000</identifier>
	    	<userParameterLong>
	    		<name>interleaves</name><value><xsl:value-of select="siemens/MEAS/sKSpace/lRadialViews" /></value>
	    	</userParameterLong>
	    	<userParameterLong>
	    		<name>fov_coefficients</name><value>1</value>
	    	</userParameterLong>
	    	<userParameterLong>
	    		<name>SamplingTime_ns</name><value><xsl:value-of select="siemens/MEAS/sWipMemBlock/alFree[57]" /></value>
	    	</userParameterLong>
	    	<userParameterDouble>
	    		<name>MaxGradient_G_per_cm</name><value><xsl:value-of select="siemens/MEAS/sWipMemBlock/adFree[7]" /></value>
	    	</userParameterDouble>
	    	<userParameterDouble>
	    		<name>MaxSlewRate_G_per_cm_per_s</name><value><xsl:value-of select="siemens/MEAS/sWipMemBlock/adFree[8]" /></value>
	    	</userParameterDouble>
	    	<userParameterDouble>
	    		<name>FOVCoeff_1_cm</name><value><xsl:value-of select="siemens/MEAS/sWipMemBlock/adFree[10]" /></value>
	    	</userParameterDouble>
	    	<userParameterDouble>
	    		<name>krmax_per_cm</name><value><xsl:value-of select="siemens/MEAS/sWipMemBlock/adFree[9]" /></value>
	    	</userParameterDouble>
	    	<comment>Using spiral design by Brian Hargreaves (http://mrsrl.stanford.edu/~brian/vdspiral/)</comment>
	    </trajectoryDescription>    
    </xsl:if>
    <encodedSpace>
		<matrixSize>
			<xsl:choose>
				<xsl:when test="siemens/MEAS/sKSpace/ucTrajectory = 1">	
					<x><xsl:value-of select="siemens/YAPS/iRoFTLength"/></x>		
				</xsl:when>	
				<xsl:otherwise>
					<x><xsl:value-of select="siemens/IRIS/DERIVED/imageColumns"/></x>
				</xsl:otherwise>
			</xsl:choose>		
		
			<y><xsl:value-of select="siemens/YAPS/iPEFTLength"/></y>		
			<z><xsl:value-of select="siemens/YAPS/i3DFTLength"/></z>
		</matrixSize>
		<fieldOfView_m>
		  	<xsl:choose>
				<xsl:when test="siemens/MEAS/sKSpace/ucTrajectory = 1">	
					<x><xsl:value-of select="siemens/MEAS/sSliceArray/asSlice/s0/dReadoutFOV * siemens/YAPS/flReadoutOSFactor"/></x>
				</xsl:when>	
				<xsl:otherwise>
					<x><xsl:value-of select="siemens/MEAS/sSliceArray/asSlice/s0/dReadoutFOV"/></x>
				</xsl:otherwise>
			</xsl:choose>		
			<y><xsl:value-of select="siemens/MEAS/sSliceArray/asSlice/s0/dPhaseFOV * (1+$phaseOversampling)"/></y>		
			<z><xsl:value-of select="siemens/MEAS/sSliceArray/asSlice/s0/dThickness * (1+$sliceOversampling)"/></z>		
		</fieldOfView_m>
    </encodedSpace>
    <reconSpace>
		<matrixSize>
			<x><xsl:value-of select="siemens/IRIS/DERIVED/imageColumns"/></x>		
			<y><xsl:value-of select="siemens/IRIS/DERIVED/imageLines"/></y>
			<xsl:choose>
				<xsl:when test="siemens/YAPS/i3DFTLength = 1">
					<z>1</z>
				</xsl:when>	
				<xsl:otherwise>
					<z><xsl:value-of select="siemens/MEAS/sKSpace/lImagesPerSlab"/></z>		
				</xsl:otherwise>
			</xsl:choose>	
		</matrixSize>
		<fieldOfView_m>
			<x><xsl:value-of select="siemens/MEAS/sSliceArray/asSlice/s0/dReadoutFOV"/></x>		
			<y><xsl:value-of select="siemens/MEAS/sSliceArray/asSlice/s0/dPhaseFOV"/></y>		
			<z><xsl:value-of select="siemens/MEAS/sSliceArray/asSlice/s0/dThickness"/></z>		
		</fieldOfView_m>
    </reconSpace>
    <encodingLimits>
		<kspace_encoding_step_1>
			<minimum>0</minimum>
			<maximum><xsl:value-of select="siemens/YAPS/iNoOfFourierLines - 1"/></maximum>
			<xsl:choose>
				<xsl:when test="siemens/MEAS/sKSpace/ucTrajectory = 1">	
					<center><xsl:value-of select="floor((siemens/MEAS/sKSpace/lPhaseEncodingLines div 2)-(siemens/MEAS/sKSpace/lPhaseEncodingLines - siemens/YAPS/iNoOfFourierLines))"/></center>
				</xsl:when>
				<xsl:otherwise>
					<center>0</center>
				</xsl:otherwise>
			</xsl:choose>
		</kspace_encoding_step_1>    
		<kspace_encoding_step_2>
			<minimum>0</minimum>
			<xsl:choose>
				<xsl:when test="not(siemens/YAPS/iNoOfFourierPartitions)">
					<maximum>0</maximum>
					<center>0</center>				
				</xsl:when>
				<xsl:otherwise>
					<maximum><xsl:value-of select="siemens/YAPS/iNoOfFourierPartitions - 1"/></maximum>
					<center><xsl:value-of select="floor((siemens/MEAS/sKSpace/lPartitions div 2)-(siemens/MEAS/sKSpace/lPartitions - siemens/YAPS/iNoOfFourierPartitions))"/></center>
				</xsl:otherwise>
			</xsl:choose>
		</kspace_encoding_step_2>
		<slice>
			<minimum>0</minimum>
			<maximum><xsl:value-of select="siemens/MEAS/sSliceArray/lSize - 1"/></maximum>
			<center>0</center>
		</slice>    		    
    </encodingLimits>
  </encoding>
</ismrmrdHeader>
</xsl:template>

</xsl:stylesheet> 